PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = 1.0000, 1.0000, 1.0000
  expName = experiment
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instruction
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    TextComponent Welcome
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Keep your hands on keys 'f' and 'j'.
        Press 'f' to continue.
    KeyboardComponent start_key
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    TextComponent sentence
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_left
      pos = (-0.4, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent image_right
      pos = (0.4, 0)
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent logic
      Code Type = Py
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      Begin Routine:
        import random

        # Get values from CSV
        word_text = word
        article_cond = article
        target = correct_type
        obj_img = obj_image
        sub_img = sub_image

        # Build image paths
        obj_path = f"obj/{obj_img}"
        sub_path = f"subs/{sub_img}"

        # Randomize left/right position
        if random.random() < 0.5:
            # Object on left, substance on right
            image_left.setImage(obj_path)
            image_right.setImage(sub_path)
            if target == 'obj':
                correct_response = 'f'
            else:
                correct_response = 'j'
        else:
            # Substance on left, object on right
            image_left.setImage(sub_path)
            image_right.setImage(obj_path)
            if target == 'sub':
                correct_response = 'f'
            else:
                correct_response = 'j'

        # Build the sentence
        if article_cond == 'a':
            sentence_text = f"Look! A {word_text}."
        else:
            sentence_text = f"Look! {word_text}."

        sentence.setText(sentence_text)
      End Routine:
        # --- End Routine ---

        # Save trial variables
        thisExp.addData('word', word_text)
        thisExp.addData('article', article_cond)
        thisExp.addData('correct_type', target)
        thisExp.addData('obj_image', obj_img)
        thisExp.addData('sub_image', sub_img)

        # Save response data
        thisExp.addData('response', key_resp.keys)
        thisExp.addData('rt', key_resp.rt)
        thisExp.addData('correct_response', correct_response)

        # Accuracy (robust to no response)
        if key_resp.keys is None:
            accuracy = 0
        elif key_resp.keys == correct_response:
            accuracy = 1
        else:
            accuracy = 0

        thisExp.addData('accuracy', accuracy)

        # OPTIONAL but often useful
        thisExp.addData('trial_index', trials_loop.thisN)

        # --- Critical: move to next row ---
        thisExp.nextEntry()
  Routine thankyou
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    TextComponent thankyou_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this experiment!

        Please press space or return to exit.
    KeyboardComponent end_key
      allowedKeys = 'space', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = conditions.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial_id', 1), ('word', 'boarse'), ('article', 'a'), ('correct_type', 'obj'), ('obj_image', 'o25.png'), ('sub_image', 's22.png')]),
      OrderedDict([('trial_id', 2), ('word', 'kreet'), ('article', 'a'), ('correct_type', 'obj'), ('obj_image', 'o2.png'), ('sub_image', 's13.png')]),
      OrderedDict([('trial_id', 3), ('word', 'smeck'), ('article', None), ('correct_type', 'sub'), ('obj_image', 'o23.png'), ('sub_image', 's3.png')]),
      OrderedDict([('trial_id', 4), ('word', 'wis'), ('article', 'a'), ('correct_type', 'obj'), ('obj_image', 'o13.png'), ('sub_image', 's9.png')]),
      OrderedDict([('trial_id', 5), ('word', 'clet'), ('article', 'a'), ('correct_type', 'obj'), ('obj_image', 'o5.png'), ('sub_image', 's1.png')]),
      OrderedDict([('trial_id', 6), ('word', 'crolt'), ('article', None), ('correct_type', 'sub'), ('obj_image', 'o20.png'), ('sub_image', 's3.png')]),
      OrderedDict([('trial_id', 7), ('word', 'boarse'), ('article', None), ('correct_type', 'sub'), ('obj_image', 'o15.png'), ('sub_image', 's19.png')]),
      OrderedDict([('trial_id', 8), ('word', 'tharge'), ('article', 'a'), ('correct_type', 'obj'), ('obj_image', 'o23.png'), ('sub_image', 's19.png')]),
      OrderedDict([('trial_id', 9), ('word', 'smeck'), ('article', 'a'), ('correct_type', 'obj'), ('obj_image', 'o10.png'), ('sub_image', 's3.png')]),
      OrderedDict([('trial_id', 10), ('word', 'stutch'), ('article', None), ('correct_type', 'sub'), ('obj_image', 'o24.png'), ('sub_image', 's3.png')])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
    Routine trial
  LoopTerminator trials_loop
  Routine thankyou
